PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'start spitial freq': '6', 'step spitial freq': '8', 'end spitial freq': '40'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  keyboardBackend = ioHub
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Routines
  Routine grating_acuity
    GratingComponent GA
      interpolate = nearest
      saveStartStop = False
      sf = 8
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      tex = sqr
      texture resolution = 512
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Flow
  Routine grating_acuity
